opentrons/protocol-designer 3.0.8
schemaVersion: 3
protocolName: COVID qPCR plate prep with master mix prep
author: Michigan Technological University/Stephen Techtmann
description: qPCR plate preparation for COVID-19 Testing with master mix preparation
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p50_single: {mount: left}
  p300_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 200 µL: {definitionId: opentrons/opentrons_96_filtertiprack_200ul/1, slot: 11}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 8}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 7}
pipetteTiprackAssignments:
  p50_single: opentrons/opentrons_96_filtertiprack_200ul/1
  p300_single: opentrons/opentrons_96_filtertiprack_200ul/1
ingredients:
  - Sterile Water: {description: Water for NTC}
  - N1 Primers: {description: Primer mix for N1}
  - N2 Primer Mix: {description: Primer mix for N2}
  - RP primer Mix: {description: Primer mix for RNAse P}
  - TaqMan Master mix
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    Sterile Water {volume: 1000}: A4
    N1 Primers {volume: 55}: D1
    N2 Primer Mix {volume: 55}: D2
    RP primer Mix {volume: 55}: D3
    TaqMan Master mix {volume: 440}: D4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 138
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 42
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 42
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 42
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: D3
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  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single
  volume: 140
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: D4
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  aspirate_mmFromBottom: 2
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 15
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1, F1, A2, F2, A3, F3, A4, F4, A5, F5, A6, F6, A7, F7, A8, F8, A9, F9, A10, F10, A11, F11, A12, F12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 15
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: B1, G1, B2, G2, B3, G3, B4, G4, B5, G5, B6, G6, B7, G7, B8, G8, B9, G9, B10, G10, B11, G11, B12, G12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 15
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: C1, H1, C2, H2, C3, H3, C4, H4, C5, H5, C6, H6, C7, H7, C8, H8, C9, H9, C10, H10, C11, H11, C12, H12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-C1
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Filter Tip Rack 200 µL, well: A1}
- aspirate: {pipette: p300_single, volume: 138, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A4, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_single, volume: 138, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 0.5, flowRate: 300}
- dropTip: {pipette: p300_single, labware: Trash, well: A1}
- pickUpTip: {pipette: p300_single, labware: Opentrons 96 Filter Tip Rack 200 µL, well: B1}
- aspirate: {pipette: p300_single, volume: 138, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A4, offsetFromBottomMm: 1, flowRate: 150}
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