opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: Index PCR
author: Tim Butler
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p50_single: {model: p50_single_v1.3, mount: left}
  p10_single: {model: p10_single_v1.3, mount: right}
labware:
  Trash: {model: fixed-trash, slot: 12}
  opentrons tiprack 300ul (1): {model: opentrons-tiprack-300ul, slot: 2}
  tiprack 10ul (1): {model: tiprack-10ul, slot: 5}
  96 flat (1): {model: 96-flat, slot: 10}
  96 flat (2): {model: 96-flat, slot: 11}
  opentrons tuberack 2ml eppendorf (1): {model: opentrons-tuberack-2ml-eppendorf, slot: 9}
  tiprack 10ul (2): {model: tiprack-10ul, slot: 7}
pipetteTiprackAssignments:
  p50_single: opentrons-tiprack-300ul
  p10_single: tiprack-10ul
ingredients:
  - Samples: {serialize: true}
  - Mastermix: {description: (Phusion & Water)}
  - Index Forward: {description: Indexing Primers}
  - Index Reverse
ingredLocations:
  opentrons tuberack 2ml eppendorf (1):
    Index Forward {volume: 20}: A1-A6, B6, B5
    Index Reverse {volume: 20}: C1-C6, D1-D6
    Mastermix {volume: 1000}: B1, B2
  96 flat (2):
    Samples {volume: 20}: A1, A10-A12, A2-A9, B1, B10-B12, B2-B9, C1, C10-C12, C2-C9, D1, D10-D12, D2-D9, E1, E10-E12, E2-E9, F1, F10-F12, F2-F9, G1, G10-G12, G2-G9, H1, H10-H12, H2-H9
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 18
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 18
  path: multiDispense
  changeTip: never
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: B1-B12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: C1-C12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: D1-D12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: E1-E12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: F1-F12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: G1-G12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: H1-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: C6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: D6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: 96 flat (2)
  aspirate_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 flat (1)
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
procedure:
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- pick-up-tip: {pipette: p50_single, labware: opentrons tiprack 300ul (1), well: A1}
- aspirate: {pipette: p50_single, volume: 41, labware: opentrons tuberack 2ml eppendorf (1), well: B1, offsetFromBottomMm: 1}
- dispense: {pipette: p50_single, volume: 18, labware: 96 flat (1), well: A1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p50_single, volume: 18, labware: 96 flat (1), well: B1, offsetFromBottomMm: 0.5}
- blowout: {pipette: p50_single, labware: opentrons tuberack 2ml eppendorf (1), well: B1}
- aspirate: {pipette: p50_single, volume: 41, labware: opentrons tuberack 2ml eppendorf (1), well: B1, offsetFromBottomMm: 1}
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