opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: MIC plates
author: Timothy Butler
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p50_multi: {model: p50_multi_v1.3, mount: right}
  p300_multi: {model: p300_multi_v1.3, mount: left}
labware:
  Trash: {model: fixed-trash, slot: 12}
  opentrons tiprack 300ul (1): {model: opentrons-tiprack-300ul, slot: 1}
  tiprack 10ul (1): {model: tiprack-10ul, slot: 2}
  trough 12row (1): {model: trough-12row, slot: 5}
  96 PCR flat (1): {model: 96-PCR-flat, slot: 7}
  96 PCR flat (2): {model: 96-PCR-flat, slot: 10}
  96 PCR flat (3): {model: 96-PCR-flat, slot: 11}
  96 PCR flat (4): {model: 96-PCR-flat, slot: 8}
pipetteTiprackAssignments:
  p50_multi: tiprack-10ul
  p300_multi: opentrons-tiprack-300ul
ingredients:
  - Media
  - Samples
ingredLocations:
  trough 12row (1):
    Media {volume: 10000}: A1-A8
  96 PCR flat (1):
    Samples {volume: 200}: A1-H1
  96 PCR flat (4):
    Samples {volume: 200}: A1-H1
  96 PCR flat (2):
    Samples {volume: 200}: A1-H1
  96 PCR flat (3):
    Samples {volume: 200}: A1-H1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: once
  aspirate_labware: trough 12row (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A2-A6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: never
  aspirate_labware: trough 12row (1)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A7-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (1)
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (1)
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 1 finished. If more plates hit resume.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: once
  aspirate_labware: trough 12row (1)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A2-A7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: never
  aspirate_labware: trough 12row (1)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A8-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (2)
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (2)
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 2 finished, hit resume if you have more plates.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: once
  aspirate_labware: trough 12row (1)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A2-A7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: never
  aspirate_labware: trough 12row (1)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A8-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (3)
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (3)
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: false
  pauseMessage: Plate 3 finished, hit resume if you have more plates.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: once
  aspirate_labware: trough 12row (1)
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A2-A7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 180
  path: single
  changeTip: never
  aspirate_labware: trough 12row (1)
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A8-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: once
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: never
  aspirate_labware: 96 PCR flat (4)
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR flat (4)
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 5
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseForAmountOfTime: true
  pauseSecond: 30
  pauseMessage: Finished. Have a good day.
procedure:
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- pick-up-tip: {pipette: p300_multi, labware: opentrons tiprack 300ul (1), well: A1}
- aspirate: {pipette: p300_multi, volume: 180, labware: trough 12row (1), well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p300_multi, volume: 180, labware: 96 PCR flat (1), well: A2, offsetFromBottomMm: 0.5}
- aspirate: {pipette: p300_multi, volume: 180, labware: trough 12row (1), well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p300_multi, volume: 180, labware: 96 PCR flat (1), well: A3, offsetFromBottomMm: 0.5}
- aspirate: {pipette: p300_multi, volume: 180, labware: trough 12row (1), well: A1, offsetFromBottomMm: 1}
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