opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: MIC_LGS
author: Laura Schaerer
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single: {mount: left}
  p50_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  (Retired) GEB 96 Tip Rack 1000 µL: {definitionId: opentrons/geb_96_tiprack_1000ul/1, slot: 10}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 11}
  Bio-Rad 96 Well Plate 200 µL PCR: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 8}
  Opentrons 15 Tube Rack with Falcon 15 mL Conical: {definitionId: opentrons/opentrons_15_tuberack_falcon_15ml_conical/1, slot: 7}
  USA Scientific 12 Well Reservoir 22 mL: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 9}
pipetteTiprackAssignments:
  p1000_single: opentrons/geb_96_tiprack_1000ul/1
  p50_multi: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Strain 1
  - Strain 2
  - Strain 3
  - 0ppm
  - 50ppm
  - 100ppm
  - 150ppm
  - 250ppm
  - 500ppm
  - 1250ppm
  - 2500ppm
  - Media
ingredLocations:
  USA Scientific 12 Well Reservoir 22 mL:
    Media {volume: 1000}: A1
    Strain 1 {volume: 1000}: A2
    Strain 2 {volume: 1000}: A3
    Strain 3 {volume: 1000}: A4
  Opentrons 15 Tube Rack with Falcon 15 mL Conical:
    0ppm {volume: 5000}: A1
    50ppm {volume: 5000}: A2
    100ppm {volume: 5000}: A3
    150ppm {volume: 5000}: A4
    250ppm {volume: 5000}: B1
    500ppm {volume: 5000}: B2
    1250ppm {volume: 5000}: B3
    2500ppm {volume: 5000}: B4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1-B6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-C6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D1-D6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1-E6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F1-F6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: G1-G6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: H1-H6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A4-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A7-A9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B7-B9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C7-C9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D7-D9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E7-E9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F7-F9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: G7-G9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: H7-H9
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A7-A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A10-A12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B10-B12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C10-C12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D10-D12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E10-E12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F10-F12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: G10-G12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 180
  path: multiDispense
  changeTip: always
  aspirate_labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: H10-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: USA Scientific 12 Well Reservoir 22 mL
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A10-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single, labware: (Retired) GEB 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single, volume: 1000, labware: Opentrons 15 Tube Rack with Falcon 15 mL Conical, well: A1, offsetFromBottomMm: 1, flowRate: 500}
- dispense: {pipette: p1000_single, volume: 180, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A1, offsetFromBottomMm: 0.5, flowRate: 1000}
- dispense: {pipette: p1000_single, volume: 180, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A2, offsetFromBottomMm: 0.5, flowRate: 1000}
- dispense: {pipette: p1000_single, volume: 180, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A3, offsetFromBottomMm: 0.5, flowRate: 1000}
- dispense: {pipette: p1000_single, volume: 180, labware: Bio-Rad 96 Well Plate 200 µL PCR, well: A4, offsetFromBottomMm: 0.5, flowRate: 1000}
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