opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: PCR ready 2.0
author: Tim Butler
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p10_single: {model: p10_single_v1.3, mount: right}
  p50_single: {model: p50_single_v1.3, mount: left}
labware:
  Trash: {model: fixed-trash, slot: 12}
  opentrons tuberack 2ml eppendorf (1): {model: opentrons-tuberack-2ml-eppendorf, slot: 1}
  opentrons tuberack 2ml eppendorf (2) (slot 4): {model: opentrons-tuberack-2ml-eppendorf, slot: 4}
  opentrons tuberack 2ml eppendorf (3): {model: opentrons-tuberack-2ml-eppendorf, slot: 7}
  opentrons tuberack 2ml eppendorf (4): {model: opentrons-tuberack-2ml-eppendorf, slot: 10}
  Out plate: {model: 96-PCR-flat, slot: 11}
  tiprack 10ul (1): {model: tiprack-10ul, slot: 5}
  opentrons tuberack 2ml eppendorf (2) (slot 8): {model: opentrons-tuberack-2ml-eppendorf, slot: 8}
  tiprack 200ul (1): {model: tiprack-200ul, slot: 2}
pipetteTiprackAssignments:
  p10_single: tiprack-10ul
  p50_single: tiprack-200ul
ingredients:
  - Master-Mix (Phusion, primers, water)
  - Samples: {description: Samples, serialize: true}
ingredLocations:
  opentrons tuberack 2ml eppendorf (1):
    Samples {volume: 50}: A1-A6, B1-B6, C1-C6, D1-D6
  opentrons tuberack 2ml eppendorf (2) (slot 4):
    Samples {volume: 50}: A1-A6, B1-B6, C1-C6, D1-D6
  opentrons tuberack 2ml eppendorf (3):
    Samples {volume: 50}: A1-A6, B1-B6, C1-C6, D1-D6
  opentrons tuberack 2ml eppendorf (4):
    Samples {volume: 50}: A1-A6, B1-B6, C1-C6, D1-D6
  opentrons tuberack 2ml eppendorf (2) (slot 8):
    Master-Mix (Phusion, primers, water) {volume: 1000}: A1, A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 20
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (2) (slot 8)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_single
  volume: 20
  path: multiDispense
  changeTip: never
  aspirate_labware: opentrons tuberack 2ml eppendorf (2) (slot 8)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 5
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A1-H1, A2-H2, A3-H3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (2) (slot 4)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (3)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (4)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  aspirate_mmFromBottom: 1
  dispense_labware: Out plate
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
procedure:
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- pick-up-tip: {pipette: p50_single, labware: tiprack 200ul (1), well: A1}
- aspirate: {pipette: p50_single, volume: 45, labware: opentrons tuberack 2ml eppendorf (2) (slot 8), well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p50_single, volume: 20, labware: Out plate, well: A1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p50_single, volume: 20, labware: Out plate, well: B1, offsetFromBottomMm: 0.5}
- blowout: {pipette: p50_single, labware: opentrons tuberack 2ml eppendorf (2) (slot 8), well: A1}
- aspirate: {pipette: p50_single, volume: 45, labware: opentrons tuberack 2ml eppendorf (2) (slot 8), well: A1, offsetFromBottomMm: 1}
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