opentrons/protocol-designer 1.1.1
protocol-schema: 1.0.0
protocol-name: qPCR_1to3
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p10_single: {model: p10_single_v1.3, mount: left}
  p50_multi: {model: p50_multi_v1.3, mount: right}
labware:
  Trash: {model: fixed-trash, slot: 12}
  tiprack 10ul (1): {model: tiprack-10ul, slot: 5}
  opentrons tiprack 300ul (1): {model: opentrons-tiprack-300ul, slot: 4}
  opentrons tuberack 2ml eppendorf (1): {model: opentrons-tuberack-2ml-eppendorf, slot: 3}
  trough 12row (1): {model: trough-12row, slot: 6}
  96 flat (1): {model: 96-flat, slot: 2}
  96 PCR tall (1): {model: 96-PCR-tall, slot: 1}
pipetteTiprackAssignments:
  p10_single: tiprack-10ul
  p50_multi: opentrons-tiprack-300ul
ingredients:
  - Mastermix
  - DNA samples
  - Standard 6
  - Standard 5
  - Standard 4
  - Standard 3
  - Standard 2
  - Standard 1
  - Water
  - Standard 7
ingredLocations:
  opentrons tuberack 2ml eppendorf (1):
    Standard 6 {volume: 20}: A1
    Standard 5 {volume: 20}: A2
    Standard 4 {volume: 20}: A3
    Standard 3 {volume: 20}: A4
    Standard 2 {volume: 20}: A5
    Standard 1 {volume: 20}: A6
    Water {volume: 100}: B1
    Standard 7 {volume: 30}: B2
  trough 12row (1):
    Mastermix {volume: 3000}: A1
  96 flat (1):
    DNA samples {volume: 20}: A1, A10-A12, A2-A9, B1, B10-B12, B2-B9, C1, C10-C12, C2-C9, D1, D10-D12, D2-D9, E1, E10-E12, E2-E9, F1, F10-F12, F2-F9, G1, G10-G12, G2-G9, H1, H10-H12, H2-H9
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: B1-B3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: C1-C3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: D1-D3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: E1-E3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: F1-F3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: G1-G3
  dispense_mmFromBottom: 0.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: H1-H3
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 4
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 16
  path: single
  changeTip: always
  aspirate_labware: trough 12row (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dispense_mmFromBottom: 0.5
  blowout_checkbox: true
  blowout_location: dest_well
procedure:
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- pick-up-tip: {pipette: p10_single, labware: tiprack 10ul (1), well: A1}
- aspirate: {pipette: p10_single, volume: 9, labware: opentrons tuberack 2ml eppendorf (1), well: A1, offsetFromBottomMm: 1}
- dispense: {pipette: p10_single, volume: 4, labware: 96 PCR tall (1), well: A1, offsetFromBottomMm: 0.5}
- dispense: {pipette: p10_single, volume: 4, labware: 96 PCR tall (1), well: A2, offsetFromBottomMm: 0.5}
- blowout: {pipette: p10_single, labware: opentrons tuberack 2ml eppendorf (1), well: A1}
- aspirate: {pipette: p10_single, volume: 5, labware: opentrons tuberack 2ml eppendorf (1), well: A1, offsetFromBottomMm: 1}
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