opentrons/protocol-designer 3.0.7
schemaVersion: 3
protocolName: qPCR_1to3
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p10_single: {mount: left}
  p50_multi: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  tiprack 10ul (1): {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 5}
  opentrons tiprack 300ul (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 4}
  opentrons tuberack 2ml eppendorf (1): {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, slot: 3}
  trough 12row (1): {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 6}
  96 flat (1): {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 2}
  96 PCR tall (1): {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 1}
pipetteTiprackAssignments:
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
  p50_multi: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Mastermix
  - DNA samples: {description: DNA}
  - Standard 6
  - Standard 5
  - Standard 4
  - Standard 3
  - Standard 2
  - Standard 1
  - Water
  - Standard 7
ingredLocations:
  opentrons tuberack 2ml eppendorf (1):
    Standard 6 {volume: 20}: A1
    Standard 5 {volume: 20}: A2
    Standard 4 {volume: 20}: A3
    Standard 3 {volume: 20}: A4
    Standard 2 {volume: 20}: A5
    Standard 1 {volume: 20}: A6
    Water {volume: 100}: B1
    Standard 7 {volume: 30}: B2
  trough 12row (1):
    Mastermix {volume: 3000}: A1
  96 flat (1):
    DNA samples {volume: 20}: A1, A10-A12, A2-A9, B1, B10-B12, B2-B9, C1, C10-C12, C2-C9, D1, D10-D12, D2-D9, E1, E10-E12, E2-E9, F1, F10-F12, F2-F9, G1, G10-G12, G2-G9, H1, H10-H12, H2-H9
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A1-A3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: B1-B3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: C1-C3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: D1-D3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: E1-E3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: F1-F3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: multiDispense
  changeTip: once
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: G1-G3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_checkbox: true
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: opentrons tuberack 2ml eppendorf (1)
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: H1-H3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A4-H4, A5-H5, A6-H6
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A7-H7, A8-H8, A9-H9
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p10_single
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: 96 flat (1)
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A10-H10, A11-H11, A12-H12
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p50_multi
  volume: 18
  path: single
  changeTip: always
  aspirate_labware: trough 12row (1)
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: 96 PCR tall (1)
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 15
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p10_single, labware: tiprack 10ul (1), well: A1}
- aspirate: {pipette: p10_single, volume: 7, labware: opentrons tuberack 2ml eppendorf (1), well: A1, offsetFromBottomMm: 1, flowRate: 5}
- dispense: {pipette: p10_single, volume: 2, labware: 96 PCR tall (1), well: A1, offsetFromBottomMm: 0.5, flowRate: 10}
- touchTip: {pipette: p10_single, labware: 96 PCR tall (1), well: A1, offsetFromBottomMm: 13.81}
- dispense: {pipette: p10_single, volume: 2, labware: 96 PCR tall (1), well: A2, offsetFromBottomMm: 0.5, flowRate: 10}
- touchTip: {pipette: p10_single, labware: 96 PCR tall (1), well: A2, offsetFromBottomMm: 13.81}
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